PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2023
  Window size (pixels) = [1280, 720]
  expName = intentionalbindingtask
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine visualstimulus
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    PolygonComponent line1
      fillColor = white
      ori [set every repeat] = degree
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
      units = pix
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  Routine response
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the delay between the key press and the line (0-999). Click submit after entering the value
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Vinisha/Desktop/Lab in psychology/conditions files/intentionalbindingtask.xlsx
    loopType = random
    nReps = 9
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    conditions:
      [{'delay': 0.1, 'degree': 60, 'conditions': 'unexp'},
      {'delay': 0.4, 'degree': 60, 'conditions': 'unexp'},
      {'delay': 0.7, 'degree': 60, 'conditions': 'unexp'},
      {'delay': 0.1, 'degree': 120, 'conditions': 'exp'},
      {'delay': 0.4, 'degree': 120, 'conditions': 'exp'},
      {'delay': 0.7, 'degree': 120, 'conditions': 'exp'},
      {'delay': 0.1, 'degree': 120, 'conditions': 'exp'},
      {'delay': 0.4, 'degree': 120, 'conditions': 'exp'},
      {'delay': 0.7, 'degree': 120, 'conditions': 'exp'},
      {'delay': 0.1, 'degree': 120, 'conditions': 'exp'},
      {'delay': 0.4, 'degree': 120, 'conditions': 'exp'},
      {'delay': 0.7, 'degree': 120, 'conditions': 'exp'}]
    Routine trial
    Routine visualstimulus
    Routine response
  LoopTerminator trials
